CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:EGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:Grayscale
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:EGFP
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.025,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertImageToObjects:[module_num:6|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
    Select the input image:Threshold
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

SplitOrMergeObjects:[module_num:7|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
    Select the input objects:ConvertImageToObjects
    Name the new objects:gall
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:gall
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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
    Select the objects to filter:gall
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:20000
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:FilterObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:KHWFS1GALL
    Overwrite existing files without warning?:No
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
OverlayObjects:[module_num:12|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
    Input:Grayscale
    Name the output image:OverlayObjects
    Objects:FilterObjects
    Opacity:0.08

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Grayscale
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|D:\\08152022 nbd cholesterol imaging session
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
